PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = IAT
  logging level = error
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    CodeComponent trials_code
      Begin Experiment:
        #declare accuracy feedback message variable
        msg=""
      Begin Routine:
        # set stimulus colors based on trial type
        if trialtype == 1 or trialtype == 2:
             stimulusColor = [1, 1, 1]
        elif trialtype >2:
             stimulusColor = [-1, 1, -1]

        # set required and feedback responses
        # attributes are invariate across blocks so can be determined based on trial type only
        if trialtype == 3: #pos
            requiredAllowed = "i"
            requiredCorrect = "i"
            feedbackAllowed = "e"
            feedbackCorrect = "e"
        elif trialtype == 4: #neg
            requiredAllowed = "e"
            requiredCorrect = "e"
            feedbackAllowed = "i"
            feedbackCorrect = "i"
        # categories depend on block order, current block and trial type
        if blockOrder == 1:
            if blocks.thisN <= 3:
                if trialtype == 1: #flowers
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
                elif trialtype == 2: #insects
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
            elif blocks.thisN >= 3:
                if trialtype == 1: #flowers
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
                elif trialtype == 2: #insects
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
        elif blockOrder == 2:
            if blocks.thisN <= 3:
                if trialtype == 1: #flowers
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
                elif trialtype == 2: #insects
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
            elif blocks.thisN >= 3:
                if trialtype == 1: #flowers
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
                elif trialtype == 2: #insects
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg=""
        else:
            msg="X"
    ImageComponent stimulusImageBox
      startVal [time (s)] = 0.3
      image [set every repeat] = $stimulusImage
      size = .6
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    TextComponent stimulusTextBox
      color [set every repeat] = $stimulusColor
      text [set every repeat] = $stimulusText
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponse
      correctAns = $requiredCorrect 
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponse
      correctAns = $feedbackCorrect 
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = .3
      store = first key
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    TextComponent feedback
      color = red
      text [set every frame] = $msg
      pos = [0, -.5]
      startVal [time (s)] = .3
      letterHeight = 0.2
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    TextComponent leftCategoryLabel
      text [set every repeat] = $leftCategory
      pos = [-.6, .85]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent rightCategoryLabel
      text [set every repeat] = $rightCategory
      pos = [.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent leftAttributeLabel
      color = $[-1, 1, -1]
      text [set every repeat] = $leftAttribute
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent rightAttributeLabel
      color = $[-1, 1, -1]
      text [set every repeat] = $rightAttribute
      pos = [.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeft
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRight
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instruction
    CodeComponent block_code
      Begin Experiment:
        trialRows = ""

        # set block order based on participant code
        participantNumber = int(expInfo['participant'])
        if (participantNumber % 2) == 1:
            blockOrder = 1
        elif (participantNumber % 2) == 0:
            blockOrder = 2
        else:
            print "****condition file error: please enter a numeric participant code****"
      Begin Routine:
        # set the stimulus file row and number of repeats based on the current block
        # this layout follows Nosek et al. 2007, "The Implicit Association Test at age 7: A methodological and conceptual review"
        if blocks.thisN == 0:
            trialRows = "10:20"
            nBlockRepeats = 2   #10*2 = 20 trials
        elif blocks.thisN == 1:
            trialRows = "0:10"
            nBlockRepeats = 2   #10*2 = 20 trials
        elif blocks.thisN == 2:
            trialRows = "0:20"
            nBlockRepeats = 1   #20*1 = 20 trials
        elif blocks.thisN == 3:
            trialRows = "0:20"
            nBlockRepeats = 2   #20*2 = 40 trials
        elif blocks.thisN == 4:
            trialRows = "0:10"
            nBlockRepeats = 4   #10*4 = 40 trials
        elif blocks.thisN == 5:
            trialRows = "0:20"
            nBlockRepeats = 1   #20*1 = 20 trials
        elif blocks.thisN == 6:
            trialRows = "0:20"
            nBlockRepeats = 2   #20*2 = 40 trials

        # set category and attribute labels based on the block order and current block
        if blockOrder == 1 and blocks.thisN <= 3:
            leftCategory = categoryA
            rightCategory = categoryB
        elif blockOrder == 1 and blocks.thisN > 3:
            leftCategory = categoryB
            rightCategory = categoryA
        elif blockOrder == 2 and blocks.thisN <= 3:
            leftCategory = categoryB
            rightCategory = categoryA
        elif blockOrder == 2 and blocks.thisN > 3:
            leftCategory = categoryA
            rightCategory = categoryB
    TextComponent instructionsBox
      text [set every repeat] = $instructions
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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    KeyboardComponent instructionsKey
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.25
      store = nothing
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    TextComponent leftCategoryLabel_2
      text [set every repeat] = $leftCategory
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent rightCategoryLabel_2
      text [set every repeat] = $rightCategory
      pos = [.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent leftAttributeLabel_2
      color = $[-1, 1, -1]
      text [set every repeat] = $leftAttribute
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent rightAttributeLabel_2
      color = $[-1, 1, -1]
      text [set every repeat] = $rightAttribute
      pos = [.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeft_2
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRight_2
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent endBox
      text = End of the task
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'block': 1, u'instructions': u'In this response task will you have to react to words and propositions that are presented on the screen. In the next phase words will be presented in ORANGE.\n\nIt is your job to decide as soon as possible whether the word refers to TRUE or FALSE.\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys. Press either one to start.'},
      {u'block': 2, u'instructions': u"The next phase some propositions will be presented in BLUE.\nThese propositons are always statements about SELF ESTEEM.\n\nYou must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the right response (TRUE).\nWhen the proposition 'I am worthless' appears, respond with the left response (FALSE).\n\nIf you make a mistake hit the correct key as soon as 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,
      {u'block': 3, u'instructions': u"Very good!\n\nThe next phase some words will be presented in ORANGE and some propositions in BLUE. These propositons are always statements about SELF ESTEEM.\n\nAgain, you must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nThe rule that you must respond to the orange words does not change:\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mista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,
      {u'block': 4, u'instructions': u"IMPORANT: THE RULE FOR THE BLUE STATEMENTS HAS NOW CHANGED.\n\nYou must respond AS IF 'I am bad and not good'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the left response (FALSE).\nWhen the proposition 'I am worthless' appears, respond with the right response (TRUE).\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys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
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = nBlockRepeats
      Selected rows = $trialRows
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      conditions:
        [{u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'True', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Correct', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Right', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Accurate', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'},
        {u'feedbackResponseCorrect': u'e', u'stimulusColour': u'orange', u'falseLabel': u'FALSE', u'trialtype': 0, u'requiredResponseCorrect': u'i', u'stimulus': u'Confirm', u'trueLabel': u'TRUE', u'requiredResponseAllowed': u'i', u'feedbackResponseAllowed': u'e'}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
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
